CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'From the study at https://www.ebi.ac.uk/biostudies/BioImages/studies/S-BIAD7 ', 'We get these channel names:', '', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:DAPI_Image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:Neutrite_MAP2_Image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:PostSynaptic_PSD95_Image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C4")
    Name to assign these images:PreSynaptic_Synaptophysin_Image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei primary objects']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
    Select the input image:DAPI_Image
    Name the primary objects to be identified:DAPI_Nuclei_Objects
    Typical diameter of objects, in pixel units (Min,Max):50,250
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:DAPI_Nuclei_Objects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

OverlayObjects:[module_num:7|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
    Input:DAPI_Image
    Name the output image:OverlayObjects
    Objects:DAPI_Nuclei_Objects
    Opacity:0.05

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI_Image
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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